PsychoPy2experiment version="2026.2.4"
Settings
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = main
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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  Routine instructions
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
      text = Shoot Don't Shoot Task
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 3
      stopVal [duration (s)] = 5
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      text:
        Press ENTER to shoot the attackers.
        Do not shoot innocent people.
        Try to act as quickly as possible.
Flow
  Routine trial
  Routine instructions
